OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  World Tour System Zero Online Session

  Code to perform an online session.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:32" => #1
  Channel List = 1:32
  Action = Select
  Channel Matching Method = Smart
-> Signal Decimation "Downsampling" => #2
  Decimation factor = 4
New input=#2, New input(1)=#0.Stimulations -> OnlineSession
  Clock frequency (Hz) = 1
  Script = WorldSystem/Zero/SourceCode/WorldOnlineCNN.py
Input Signal=#1, Input Stimulations=#0.Stimulations -> Generic stream writer "Rawdata Acquisition"
  Filename = WorldSystem/Zero/Online/Data/ZeroOnline-[$core{date}-$core{time}].ov
  Use compression = false
#0.Stimulations -> Player Controller "Stop Trigger"
  Stimulation name = OVTK_StimulationId_Number_08
  Action to perform = Stop
